PsychoPy2experiment version="1.85.2"
Settings
  Monitor = testMonitor
  Experiment info = {u'gender': u'', u'participant': u'', u'L1': u''}
  Units = use prefs
  Window size (pixels) = [1000, 600]
  Full-screen window = False
  expName = rating
  Screen = 1
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Routines
  Routine trial2
    TextComponent word2
      text [set every repeat] = $word
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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    TextComponent trial_number2
      text [set every repeat] = str($main_trial.thisN+1) + " / " + str($main_trial.nTotal) 
      pos = (0.5, -0.8)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    SoundComponent sound_2
      sound [set every repeat] = $sound
      startVal [time (s)] = 1
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    TextComponent scale_msg2
      wrapWidth = 2
      text = least accurate(1)            most accurate(7)
      pos = (0, -0.2)
      startVal [time (s)] = 2
      letterHeight = 0.1
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    RatingScaleComponent rating2
      pos = 0, -0.4
      high = 7
      startVal [time (s)] = 2
      size = 1.0
      forceEndRoutine = True
      low = 1
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  Routine trial1
    TextComponent word1
      text [set every repeat] = $word
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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    TextComponent trial_number1
      text [set every repeat] = str($pract_trial.thisN+1) + " / " + str($pract_trial.nTotal) 
      pos = (0.5, -0.8)
      startVal [time (s)] = 0
      letterHeight = 0.1
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    SoundComponent sound_1
      sound [set every repeat] = $sound
      startVal [time (s)] = 1
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    TextComponent scale_msg1
      wrapWidth = 2
      text = least accurate(1)            most accurate(7)
      pos = (0, -0.2)
      startVal [time (s)] = 2
      letterHeight = 0.1
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    RatingScaleComponent rating1
      pos = 0, -0.4
      high = 7
      startVal [time (s)] = 2
      size = 1.0
      forceEndRoutine = True
      low = 1
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  Routine the_end
    TextComponent text
      wrapWidth = 2
      text = Thank you for participating in this experiment.
      stopVal [duration (s)] = 2
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine main_instruction
    TextComponent instruction2
      wrapWidth = 2
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        OK, ready to start the main experiment?

        Listen and rate on a scale from 1 to 7.
        Try to respond as quickly and as accurately as possible.

        Press spacebar to continue.
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine practice_introduction
    TextComponent instruction1
      wrapWidth = 2
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Welcome.

        Listen carefully to the sounds that you will hear
        and then rate on a scale from 1 to 7.

        Try to respond as quickly and as accurately as possible.

        Press spacebar to begin.
    KeyboardComponent key_resp_1
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine practice_introduction
  LoopInitiator pract_trial loopType="TrialHandler"
    conditionsFile = practice_stimuli.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'sound': u'sound/cloud.wav', 'word': u'cloud'},
      {'sound': u'sound/clout.wav', 'word': u'clout'}]
    Routine trial1
  LoopTerminator pract_trial
  Routine main_instruction
  LoopInitiator main_trial loopType="TrialHandler"
    conditionsFile = main_stimuli.xlsx
    loopType = random
    nReps = 2
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    conditions:
      [{'sound': u'sound/light.wav', 'word': u'light'},
      {'sound': u'sound/loud.wav', 'word': u'loud'},
      {'sound': u'sound/side.wav', 'word': u'side'},
      {'sound': u'sound/sight.wav', 'word': u'sight'}]
    Routine trial2
  LoopTerminator main_trial
  Routine the_end
